PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine baseline
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    PolygonComponent polygon_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine red
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    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ttl
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    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine white
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    PolygonComponent polygon_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine ttl
  LoopInitiator one_cycle loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    LoopInitiator on_period loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine red
      Routine white
    LoopTerminator on_period
    Routine baseline
  LoopTerminator one_cycle
